;avance-version (12/01/11)
;HNCO_COdec_sep_no_acc
;
;
;
;on/off resonance Ca, C=O pulses using shaped pulses: call getprosol
;N evolution: constant time or semi-constant time (mode chosen automatically based on tmax2) 
;phase sensitive using Echo/Antiecho gradient selection (T2)
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=

prosol relations=<triple>

#include <Avance.incl>
#include <Grad.incl>
#include <CCR_Params.incl>


; ***** Delays: *****

;"in1 = inf1"
;define delay T1
;"T1 = 0"
;define delay tmax1
;"tmax1 = td1*in1/2"

"in2 = inf2"
define delay T2
"T2 = 0"
define delay tmax2
"tmax2 = td2*in2/2"


; *** First INEPT Hz -> HzNz ***
define delay DELTA11
"DELTA11 = timeHN/2 - p16 - d16"


; *** Second INEPT HzNz -> COzNz ***
define delay DELTA21
define delay DELTA22
define delay DELTA23
"DELTA21 = timeNH"      ;H refocusing delay in second INEPT
"DELTA22 = timeNCO/2 - DELTA21 - p1 - d13*2"        ;Compensated for H 90 pulse.
"DELTA23 = timeNCO/2"


; *** CO decoupling duration ***
define delay DELTA_dec
"DELTA_dec=d60"


; *** COS-INEPT ***
define delay ECHOCOMP
"ECHOCOMP = p21*4/PI"

define delay ECHOTIME
"ECHOTIME = p16 + d16 + de - p1*2/PI"       ;Compensated for de and last pulse.

define delay DELTANandH
define delay DELTAHN1
define delay DELTAHN2
"DELTANandH = timeNandH/2 - p16 - d16"
"DELTAHN1 = timeHN/2 - p16 - d16 - p21"
"DELTAHN2 = timeHN/2 - p16 - d16"


; ***** Run-time-calculated delays: *****
define delay T2aCA
define delay T2aGRAD
define delay T2aCO
define delay T2b
define delay T2c

define delay maxtmax2
"maxtmax2=timeNCO"


; ***** Other parameters: *****
define list<frequency> CO_list=<$FQ1LIST>


"acqt0 = 0"
baseopt_echo


; ***** Beginning of the pulse sequence *****
1 ze

2 d11       ;Start of loop.


; ***** Run-time calculations: *****
"T2aCA = T2/2"
"T2aCO = timeNCO/2 - p14"       ;Corrected for CA inversion pulse.
"if (T2aCA < (p16+d16)) {T2aGRAD = T2aCA + p14;} else {T2aGRAD = 0;}"
"if (tmax2 <= timeNCO) {T2b = 0;} else {T2b = T2*(1 - timeNCO/tmax2)/2;}"
"if (tmax2 <= timeNCO) {T2c = (timeNCO - T2)/2 + p14;} else {T2c = timeNCO*(1 - T2/tmax2)/2 + p14;}"

if "tmax2 >= maxtmax2" goto 999    
; ***** End of run-time calculations *****



    d1 fq=cnst23(bf ppm):f2     ;f2 to CA/CO middle
    d13 UNBLKGRAD       ;Unblank gradient amplifier and hold lock.


; ***** Crush non-proton polarization: *****
    (p3 ph0 pl2):f2
    (p21 ph0 pl3):f3
    p16:gp0
    d16

    (p3 ph1 pl2):f2
    (p21 ph1 pl3):f3
    p16:gp0
    d16 fq=cnst22(bf ppm):f2	;Switch f2 to CO
    

; ***** Hz -> HzNz: *****
    (p1 ph0 pl1):f1
    DELTA11
    p16:gp10
    d16
    (center (p2 ph0 pl1):f1 (p22 ph0 pl3):f3)
    DELTA11
    p16:gp10
    d16
    (p1 ph1 pl1):f1
    (p11:sp1 ph0):f1        ;Water flipback
    
    d13
    p16:gp1
    d16


; ***** HzNz -> COzNz: *****
    (p21 ph12 pl3):f3
    DELTA21
    (p1 ph1 pl1):f1
    (d13 pl19):f1
    (d13 cpds1 ph0):f1
    DELTA22
    (center (p14:sp3 ph0):f2 (p22 ph0 pl3):f3)      ;f2 - CO on resonance
    DELTA23
    (p21 ph0 pl3):f3

    d13 do:f1
    (p1 ph3 pl1):f1


; ***** CO decoupling: *****
    d13 CO_list:f2
    d13 pl60:f2 ;pl2:f2
    (d13 cw ph0):f2
    DELTA_dec
    d13 do:f2
    d13 fq=cnst22(bf ppm):f2
    d13 pl2:f2

    p16:gp2
    d16


    (p1 ph1 pl1):f1
    (d13 pl19):f1
    (d13 cpds1 ph0):f1


; ***** COzNz -> HzNz with N evolution (T2): *****
    (p21 ph21 pl3):f3
    T2c
    (p22 ph0 pl3):f3
    T2b
    (ralign
        (d13 do p1 ph3 pl1 timeNH):f1
        (p14:sp3 ph0 T2aCO p14:sp5 ph0 T2aCA):f2        ;sp3 - CO on res, sp5 - CA off res
        (p16:gp21*EA d16 T2aGRAD):f3
    )
    (p21 ph0 pl3):f3
	


; ***** HzNz -> Hz (COS-INEPT): *****
    ECHOCOMP
    (p1 ph0 pl1):f1
    p16:gp11
    d16
    DELTANandH
    (center (p2 ph2 pl1):f1 (p22 ph0 pl3):f3)
    DELTANandH
    p16:gp11
    d16
    
    (p1 ph1 pl1):f1
    (p21 ph13 pl3):f3       ;E/A selecting pulse.
    p16:gp12
    d16
    DELTAHN1
    (center (p2 ph0 pl1):f1 (p22 ph0 pl3):f3)
    DELTAHN2
    p16:gp12
    d16

    (p1 ph0 pl1):f1
    ECHOTIME
    (p2 ph2 pl1):f1
    p16:gp22        ;Coherence selection gradient.
    
    d16 pl16:f3 BLKGRAD     ;Set power for decoupling, blank gradient amplifier and sample lock.


; ***** Acquisition: *****
    go=2 ph31 cpd3:f3 finally do:f3
    d11 mc #0 to 2

    F1QF(calclist(CO_list, 1))
    F2EA(calph(ph13,+180) & calgrad(EA), caldel(T2, +in2) & calph(ph21, +180) & calph(ph31, +180))

999 exit



; ***** Constant phases: *****
ph0 = 0
ph1 = 1
ph2 = 2
ph3 = 3

; ***** Phases incremented for indirect dimensions: *****
ph12 = 0 0 2 2
ph13 = 3

; ***** Phase at start of INEPT before COS-INEPT - for TPPI shifting in T3: *****
ph21 = 0 2

; ***** Receiver phase: *****
ph31 = 0 2 2 0 

;p1: f1 channel -  90 degree high power pulse
;p2: f1 channel - 180 degree high power pulse
;p3: f2 channel -  90 degree high power pulse
;p4: f2 channel - 180 degree high power pulse
;p11: f1 channel -  90 degree shaped pulse (water flipback)
;p13: f2 channel -  90 Q5 Cali/CO
;p14: f2 channel - 180 Q3 Cali/CO
;p41: f1 channel - 90 degree eburp and inverse eburp pulse (HN selective)
;p42: f1 channel - 180 degree reburp pulse (HA selective)

;p16: homospoil/gradient pulse  [1 msec]

;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse

;p53: f4 channel - 90 degree high power pulse

;pl1: power for 1H  pulses
;pl2: power for 13C pulses
;pl3: power for 15N pulses
;pl4: power for 2H pulses
;pl60: power for CO decoupling

;cpd1: decoupling according to sequence defined by cpdprg1, DIPSI2
;cpd2: decoupling according to sequence defined by cpdprg2, waltz16
;cpd4: decoupling according to sequence defined by cpdprg4, waltz16

;d1: relaxation delay	[1.2 sec]
;d11: delay for disk I/O	[30 msec]
;d13: short delay  [4 usec]
;d16: delay for homospoil/gradient recovery [200 usec]

;cnst21: CA offset in ppm [56]
;cnst22: CO offset in ppm [176]
;cnst24: CO decoupling offset in ppm [calculated in run-time]
;cnst25: CO spectral width in ppm [15]
;cnst19: HA offset in ppm [4.3]
;cnst18: HA bandwidth in ppm [3.0]

;gpnam0: SMSQ10.100
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100
;gpnam3: SMSQ10.100
;gpnam4: SMSQ10.100
;gpnam5: SMSQ10.100
;gpnam6: SMSQ10.100
;gpnam10: SMSQ10.100
;gpnam11: SMSQ10.100
;gpnam12: SMSQ10.100
;gpnam21: SMSQ10.100
;gpnam22: SMSQ10.100

;gpz0: N and CO homospoil gradient
;gpz1: Homospoil gradient after H.
;gpz2: Homospoil gradient after N.
;gpz3: Homospoil gradient after CO.
;gpz4: Homospoil gradient after CA.
;gpz7: Homospoil gradient after N.
;gpz6: Pair of gradients during CCR.
;gpz8: Homospoil gradient after CCR.
;gpz9: Homospoil gradient after N.
;gpz10: Homospoil gradient after CA.
;gpz5: Homospoil gradient after CO.

;gpz11: Gradient in first COS-INEPT echo - 5%.
;gpz12: Gradient in second COS-INEPT echo - -2%.

;gpz21: First coherence selection gradient (on N) - 80%.
;gpz22: Second coherence selection gradient (on H) - 8.1%.

;sp1: f1 channel - shaped pulse  90 degree  (H2O on resonance)
;sp2: f2 channel, 90 Q5 Cali/CO on resonance.
;sp3: f2 channel, 180 Q3 Cali/CO on resonance.
;sp4: f2 channel, 90 Q5 Cali/CO off resonance.
;sp5: f2 channel, 180 Q3 Cali with offset on CO.
;sp6: f2 channel, 90 Q5 Cali/CO off resonance time reversed.
;sp7: f2 channel, 180 Q3 CO with offset on CA.
;sp8: f2 channel, 90 Q5 Cali/CO on resonance time reversed.
;sp26:wvm: reburp(cnst18 ppm, cnst19 ppm)




